PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = prelearned_chunks
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    TextComponent textGame
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Game
        Press y or n
    KeyboardComponent keyRespuesta
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
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    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        Press space plis.
    KeyboardComponent keySkip1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cross
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    TextComponent textCross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine thanks
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    TextComponent textThanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks!
        Press space plis.
    KeyboardComponent keySkip2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = config/config.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trialType': 'chunk', 'letter1': 'M', 'type_letter1': 'bold', 'letter2': 'Y', 'type_letter2': 'bold', 'letter3': 'U', 'type_letter3': 'italic', 'letter4': 'P', 'type_letter4': 'italic', 'letter5': 'A', 'type_letter5': 'bold', 'letter6': 'S', 'type_letter6': 'italic', 'letter7': 'T', 'type_letter7': 'italic', 'letter8': 'O', 'type_letter8': 'italic', 'starPosition': 1.0, 'letterTarget': 'M', 'TypeTarget': 'bold', 'letterFoil1': 'M', 'typeFoil1': 'italic', 'letterFoil2': 'I', 'typeFoil2': 'bold', 'letterFoil3': 'I', 'typeFoil3': 'italic'},
      {'trialType': 'chunk', 'letter1': 'U', 'type_letter1': 'bold', 'letter2': 'P', 'type_letter2': 'italic', 'letter3': 'I', 'type_letter3': 'bold', 'letter4': 'F', 'type_letter4': 'italic', 'letter5': 'T', 'type_letter5': 'italic', 'letter6': 'O', 'type_letter6': 'bold', 'letter7': 'A', 'type_letter7': 'bold', 'letter8': 'S', 'type_letter8': 'italic', 'starPosition': 2.0, 'letterTarget': 'P', 'TypeTarget': 'italic', 'letterFoil1': 'P', 'typeFoil1': 'bold', 'letterFoil2': 'W', 'typeFoil2': 'italic', 'letterFoil3': 'W', 'typeFoil3': 'bold'},
      {'trialType': 'chunk', 'letter1': 'T', 'type_letter1': 'bold', 'letter2': 'O', 'type_letter2': 'bold', 'letter3': 'U', 'type_letter3': 'bold', 'letter4': 'P', 'type_letter4': 'italic', 'letter5': 'A', 'type_letter5': 'italic', 'letter6': 'S', 'type_letter6': 'italic', 'letter7': 'W', 'type_letter7': 'bold', 'letter8': 'E', 'type_letter8': 'italic', 'starPosition': 3.0, 'letterTarget': 'U', 'TypeTarget': 'bold', 'letterFoil1': 'U', 'typeFoil1': 'italic', 'letterFoil2': 'I', 'typeFoil2': 'bold', 'letterFoil3': 'I', 'typeFoil3': 'italic'},
      {'trialType': 'chunk', 'letter1': 'W', 'type_letter1': 'italic', 'letter2': 'E', 'type_letter2': 'italic', 'letter3': 'U', 'type_letter3': 'italic', 'letter4': 'P', 'type_letter4': 'italic', 'letter5': 'I', 'type_letter5': 'italic', 'letter6': 'F', 'type_letter6': 'bold', 'letter7': 'T', 'type_letter7': 'italic', 'letter8': 'O', 'type_letter8': 'italic', 'starPosition': 4.0, 'letterTarget': 'P', 'TypeTarget': 'italic', 'letterFoil1': 'P', 'typeFoil1': 'bold', 'letterFoil2': 'A', 'typeFoil2': 'italic', 'letterFoil3': 'A', 'typeFoil3': 'bold'}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
    Routine cross
    Routine trial
  LoopTerminator trials
  Routine thanks
